PsychoPy2experiment version="2026.2.4"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  End Message = Thank you. You may close this window.
  Experiment info = {'participant': 'test001', 'condition': 'auto'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['conditions/two_orientations.csv', 'conditions/quest_conditions.csv']
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = confidence_probe
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        Welcome.

        Press SPACE to begin.
    KeyboardComponent welcome_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine consent
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    TextComponent consent_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        INFORMATION AND CONSENT

        This study asks you to judge the tilt of brief striped patches using the keyboard. It lasts about 20-30 minutes. Participation is voluntary and you may stop at any time by pressing ESCAPE. No identifying information is collected.

        [Replace with the ethics-approved participant information and consent text.]

        Press SPACE to give consent and continue.
    KeyboardComponent consent_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  CounterbalanceRoutine conditionAllocation
    endExperimentOnDepletion = False
    nGroups = 3
    nReps = 15
    nSlots = 2
    saveData = True
    saveRemaining = True
    specMode = uniform
  Routine instructions
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    TextComponent instructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        On each trial, you will see a striped patch tilted in one of two directions.

        Press F for a left-tilted patch.
        Press J for a right-tilted patch.

        Respond as accurately as possible. If you are unsure, make your best guess.
        Keep your index fingers on F and J throughout the task.

        Press SPACE to continue.
    KeyboardComponent instructions_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine initialize
    RoutineSettingsComponent initialize
      stopVal [duration (s)] = 0.05
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    TextComponent init_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.05
      text = +
      wrapWidth = 1.4
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    CodeComponent init_code
      Code Type = Both
      Before Experiment:
        def median_value(values):
            ordered = sorted(values)
            n = len(ordered)
            if n == 0:
                return 8.0
            middle = n // 2
            if n % 2 == 1:
                return float(ordered[middle])
            return float((ordered[middle - 1] + ordered[middle]) / 2.0)
      Before JS Experiment:
        var probeCondition = "";
        var probeSchedule = [];
        var globalTrialN = 0;
        var questLevels = [];
        var tiltDeg = 8.0;
        var probeThisTrial = 0;
        var trialIndex = -1;
        var choiceMade = 0;
        var confidenceMade = 0;
        var showConfInstr = 0;
        var showNeutralInstr = 1;
        var feedbackText = "";
        var feedbackColor = "white";
        var blockText = "";
        var breakText = "";
        var FINISHED = PsychoJS.Status.FINISHED;  // used in the conditional start of *_wait_fix
        var decisionEnd = -1;
        var confRating = 0;
        var confMoved = 0;
        var confNKeysSeen = 0;
        var confFirstT = '';
        var confSubmitT = '';
        var markerX = 0;
        var markerOpacity = 0;
        var calibTiltSign = 1;
        var calibCorrAns = "j";

        function shuffledCopy(values) {
            let output = values.slice();
            for (let i = output.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                const temporary = output[i];
                output[i] = output[j];
                output[j] = temporary;
            }
            return output;
        }

        function medianValue(values) {
            let ordered = values.slice().sort((a, b) => a - b);
            let n = ordered.length;
            if (n === 0) {
                return 8.0;
            }
            let middle = Math.floor(n / 2);
            if (n % 2 === 1) {
                return Number(ordered[middle]);
            }
            return Number((ordered[middle - 1] + ordered[middle]) / 2.0);
        }
      Begin Experiment:
        probeCondition = ''
        probeSchedule = []
        for blockN in range(4):
            oneBlock = [1] * 10 + [0] * 30
            shuffle(oneBlock)
            probeSchedule.extend(oneBlock)

        showConfInstr = 0
        showNeutralInstr = 1
        globalTrialN = 0
        questLevels = []
        tiltDeg = 8.0
        probeThisTrial = 0
        trialIndex = -1
        choiceMade = 0
        confidenceMade = 0
        thisExp.addData('probeScheduleString', ''.join(str(p) for p in probeSchedule))
      Begin JS Experiment:
        probeSchedule = [];
        for (let blockN = 0; blockN < 4; blockN++) {
            let oneBlock = Array(10).fill(1).concat(Array(30).fill(0));
            oneBlock = shuffledCopy(oneBlock);
            probeSchedule = probeSchedule.concat(oneBlock);
        }

        psychoJS.experiment.addData('probeScheduleString', probeSchedule.join(''));
      Begin JS Routine:
        let requestedCondition = String(expInfo['condition']).trim().toLowerCase();
        let groupToCondition = {0: 'no_probe', 1: 'sparse_probe', 2: 'full_probe'};
        let conditionSource = '';
        if (requestedCondition === '' || requestedCondition === 'auto') {
            if (conditionAllocation.group === undefined || conditionAllocation.group === null) {
                quitPsychoJS('No more slots remaining for this study.', true);
            }
            probeCondition = groupToCondition[Number(conditionAllocation.group)];
            conditionSource = 'counterbalance';
        } else if (Object.values(groupToCondition).includes(requestedCondition)) {
            probeCondition = requestedCondition;  // manual override (testing)
            conditionSource = 'manual';
        } else {
            throw new Error('condition must be auto, no_probe, sparse_probe, or full_probe');
        }
        expInfo['condition'] = probeCondition;
        showConfInstr = (probeCondition !== 'no_probe') ? 1 : 0;
        showNeutralInstr = 1 - showConfInstr;
        psychoJS.experiment.addData('assignedCondition', probeCondition);
        psychoJS.experiment.addData('conditionSource', conditionSource);
      Begin Routine:
        requestedCondition = str(expInfo['condition']).strip().lower()
        groupToCondition = {0: 'no_probe', 1: 'sparse_probe', 2: 'full_probe'}
        if requestedCondition in ('', 'auto'):
            # PsychoPy flags `finished` when the LAST slot is handed out, so test for a missing group instead
            if conditionAllocation.group is None:
                print('No counterbalance slots remaining for this study.')
                quit(thisExp, win=win)
            probeCondition = groupToCondition[int(conditionAllocation.group)]
            conditionSource = 'counterbalance'
        elif requestedCondition in groupToCondition.values():
            probeCondition = requestedCondition  # manual override (testing)
            conditionSource = 'manual'
        else:
            raise ValueError('condition must be auto, no_probe, sparse_probe, or full_probe')
        expInfo['condition'] = probeCondition
        showConfInstr = int(probeCondition != 'no_probe')
        showNeutralInstr = 1 - showConfInstr
        thisExp.addData('assignedCondition', probeCondition)
        thisExp.addData('conditionSource', conditionSource)
  Routine confidence_instructions
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    TextComponent confidence_instructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        On some trials, you will also be asked how confident you are that your choice was correct.

        A scale from 1 to 6 will appear:
        1 means you were guessing, 6 means you were very certain.

        Press F to move the marker left and J to move it right, then press SPACE to confirm. There is no time limit for the rating.

        Use the entire scale when appropriate. Confidence is about the choice you just made, not your general ability.

        Press SPACE to continue.
    KeyboardComponent confidence_instructions_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine neutral_instructions
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    TextComponent neutral_instructions_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        After each decision, a fixation cross may remain on the screen briefly. Keep looking at the cross until the next patch appears.

        Press SPACE to continue.
    KeyboardComponent neutral_instructions_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine practice_intro
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    TextComponent practice_intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        Practice: the patch is clearly tilted and you will get feedback.

        Press SPACE to start.
    KeyboardComponent practice_intro_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine practice_decision
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    TextComponent practice_pre_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = +
      wrapWidth = 1.4
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    GratingComponent practice_gabor
      contrast = 0.8
      mask = gauss
      ori [set every repeat] = tiltSign * 12
      sf = 4
      size = (0.18, 0.18)
      startVal [condition] = practice_pre_fix.status == FINISHED
      stopVal [duration (s)] = 0.15
      tex = sin
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    TextComponent practice_wait_fix
      letterHeight = 0.05
      startVal [condition] = practice_gabor.status == FINISHED
      stopVal [time (s)] = 2.5
      text = +
      wrapWidth = 1.4
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    KeyboardComponent practice_resp
      allowedKeys = ['f', 'j']
      correctAns [set every repeat] = $corrAns
      forceEndRoutine = False
      startVal [condition] = practice_pre_fix.status == FINISHED
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent practice_minexposure
      Code Type = Both
      Begin JS Routine:
        decisionEnd = -1;
      Begin Routine:
        decisionEnd = -1
      Each Frame:
        if decisionEnd < 0:
            if practice_resp.keys and t >= 1.0 + 0.15:
                decisionEnd = t
            elif t >= 1.0 + 1.5:
                decisionEnd = t
        if decisionEnd >= 0:
            if True:
                continueRoutine = False
            elif t >= decisionEnd + 1.5:
                continueRoutine = False
      Each JS Frame:
        if (decisionEnd < 0) {
            if (practice_resp.keys !== undefined && practice_resp.keys !== null && practice_resp.keys.length > 0 && t >= 1.0 + 0.15) {
                decisionEnd = t;
            } else if (t >= 1.0 + 1.5) {
                decisionEnd = t;
            }
        }
        if (decisionEnd >= 0) {
            if (true) {
                continueRoutine = false;
            } else if (t >= decisionEnd + 1.5) {
                continueRoutine = false;
            }
        }
    CodeComponent practice_end
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData('phase', 'practice');
      End Routine:
        thisExp.addData('phase', 'practice')
  Routine practice_feedback
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    CodeComponent practice_feedback_code
      Code Type = Both
      Begin JS Routine:
        if (practice_resp.keys === undefined || practice_resp.keys === null || practice_resp.keys.length === 0) {
            feedbackText = '';  // no response: no feedback message
            feedbackColor = 'white';
        } else if (practice_resp.corr === 1) {
            feedbackText = 'Correct';
            feedbackColor = '#2ecc40';
        } else {
            feedbackText = 'Incorrect';
            feedbackColor = '#ff4136';
        }
      Begin Routine:
        if not practice_resp.keys:
            feedbackText = ''  # no response: no feedback message
            feedbackColor = 'white'
        elif practice_resp.corr == 1:
            feedbackText = 'Correct'
            feedbackColor = '#2ecc40'
        else:
            feedbackText = 'Incorrect'
            feedbackColor = '#ff4136'
    TextComponent practice_feedback_text
      color [set every repeat] = $feedbackColor
      letterHeight = 0.06
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $feedbackText
      wrapWidth = 1.4
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  Routine calibration_intro
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    TextComponent calibration_intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        Calibration: the patch will get harder to see. No feedback now. Keep responding as accurately as you can.

        Press SPACE to start.
    KeyboardComponent calibration_intro_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine calibration_decision
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    CodeComponent calibration_setup
      Code Type = Both
      Begin JS Routine:
        if (Math.random() < 0.5) {
            calibTiltSign = -1;
            calibCorrAns = 'f';
        } else {
            calibTiltSign = 1;
            calibCorrAns = 'j';
        }
      Begin Routine:
        if random() < 0.5:
            calibTiltSign = -1
            calibCorrAns = 'f'
        else:
            calibTiltSign = 1
            calibCorrAns = 'j'
    TextComponent calibration_pre_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = +
      wrapWidth = 1.4
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    GratingComponent calibration_gabor
      contrast = 0.8
      mask = gauss
      ori [set every repeat] = calibTiltSign * level
      sf = 4
      size = (0.18, 0.18)
      startVal [condition] = calibration_pre_fix.status == FINISHED
      stopVal [duration (s)] = 0.15
      tex = sin
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    TextComponent calibration_wait_fix
      letterHeight = 0.05
      startVal [condition] = calibration_gabor.status == FINISHED
      stopVal [time (s)] = 2.5
      text = +
      wrapWidth = 1.4
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    KeyboardComponent calibration_resp
      allowedKeys = ['f', 'j']
      correctAns [set every repeat] = $calibCorrAns
      forceEndRoutine = False
      startVal [condition] = calibration_pre_fix.status == FINISHED
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent calibration_minexposure
      Code Type = Both
      Begin JS Routine:
        decisionEnd = -1;
      Begin Routine:
        decisionEnd = -1
      Each Frame:
        if decisionEnd < 0:
            if calibration_resp.keys and t >= 1.0 + 0.15:
                decisionEnd = t
            elif t >= 1.0 + 1.5:
                decisionEnd = t
        if decisionEnd >= 0:
            if True:
                continueRoutine = False
            elif t >= decisionEnd + 1.5:
                continueRoutine = False
      Each JS Frame:
        if (decisionEnd < 0) {
            if (calibration_resp.keys !== undefined && calibration_resp.keys !== null && calibration_resp.keys.length > 0 && t >= 1.0 + 0.15) {
                decisionEnd = t;
            } else if (t >= 1.0 + 1.5) {
                decisionEnd = t;
            }
        }
        if (decisionEnd >= 0) {
            if (true) {
                continueRoutine = false;
            } else if (t >= decisionEnd + 1.5) {
                continueRoutine = false;
            }
        }
    CodeComponent calibration_end
      Code Type = Both
      End JS Routine:
        questLevels.push(Number(level));
        psychoJS.experiment.addData('phase', 'calibration');
        psychoJS.experiment.addData('tiltSignUsed', calibTiltSign);
        psychoJS.experiment.addData('corrAns', calibCorrAns);
      End Routine:
        questLevels.append(float(level))
        thisExp.addData('phase', 'calibration')
        thisExp.addData('tiltSignUsed', calibTiltSign)
        thisExp.addData('corrAns', calibCorrAns)
  Routine calibration_summary
    RoutineSettingsComponent calibration_summary
      stopVal [duration (s)] = 0.5
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    CodeComponent calibration_summary_code
      Code Type = Both
      Begin JS Routine:
        let lastLevels = questLevels.slice(-10);
        tiltDeg = medianValue(lastLevels);
        tiltDeg = Math.min(Math.max(tiltDeg, 1.0), 15.0);
        psychoJS.experiment.addData('calibratedTiltDeg', tiltDeg);
        psychoJS.experiment.addData('calibrationAtBoundary', (tiltDeg <= 1.0 || tiltDeg >= 15.0) ? 1 : 0);
      Begin Routine:
        lastLevels = questLevels[-10:]
        tiltDeg = median_value(lastLevels)
        tiltDeg = min(max(tiltDeg, 1.0), 15.0)
        thisExp.addData('calibratedTiltDeg', tiltDeg)
        thisExp.addData('calibrationAtBoundary', int(tiltDeg <= 1.0 or tiltDeg >= 15.0))
    TextComponent calibration_done_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = Calibration complete
      wrapWidth = 1.4
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  Routine baseline_intro
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    TextComponent baseline_intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        Next part. No confidence reports in this part.

        Press SPACE to start.
    KeyboardComponent baseline_intro_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine baseline_decision
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    TextComponent baseline_pre_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = +
      wrapWidth = 1.4
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    GratingComponent baseline_gabor
      contrast = 0.8
      mask = gauss
      ori [set every repeat] = tiltSign * tiltDeg
      sf = 4
      size = (0.18, 0.18)
      startVal [condition] = baseline_pre_fix.status == FINISHED
      stopVal [duration (s)] = 0.15
      tex = sin
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    TextComponent baseline_wait_fix
      letterHeight = 0.05
      startVal [condition] = baseline_gabor.status == FINISHED
      text = +
      wrapWidth = 1.4
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    KeyboardComponent baseline_resp
      allowedKeys = ['f', 'j']
      correctAns [set every repeat] = $corrAns
      forceEndRoutine = False
      startVal [condition] = baseline_pre_fix.status == FINISHED
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent baseline_minexposure
      Code Type = Both
      Begin JS Routine:
        decisionEnd = -1;
      Begin Routine:
        decisionEnd = -1
      Each Frame:
        if decisionEnd < 0:
            if baseline_resp.keys and t >= 1.0 + 0.15:
                decisionEnd = t
            elif t >= 1.0 + 1.5:
                decisionEnd = t
        if decisionEnd >= 0:
            if False:
                continueRoutine = False
            elif t >= decisionEnd + 1.5:
                continueRoutine = False
      Each JS Frame:
        if (decisionEnd < 0) {
            if (baseline_resp.keys !== undefined && baseline_resp.keys !== null && baseline_resp.keys.length > 0 && t >= 1.0 + 0.15) {
                decisionEnd = t;
            } else if (t >= 1.0 + 1.5) {
                decisionEnd = t;
            }
        }
        if (decisionEnd >= 0) {
            if (false) {
                continueRoutine = false;
            } else if (t >= decisionEnd + 1.5) {
                continueRoutine = false;
            }
        }
    CodeComponent baseline_end
      Code Type = Both
      End JS Routine:
        psychoJS.experiment.addData('phase', 'baseline');

        psychoJS.experiment.addData('tiltDegUsed', tiltDeg);
        psychoJS.experiment.addData('probeScheduled', 0);
      End Routine:
        thisExp.addData('phase', 'baseline')

        thisExp.addData('tiltDegUsed', tiltDeg)
        thisExp.addData('probeScheduled', 0)
  Routine main_intro
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    TextComponent main_intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.4
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      text:
        Main task. Remember: F = left tilt, J = right tilt.

        Press SPACE to start.
    KeyboardComponent main_intro_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine block_intro
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    CodeComponent block_intro_code
      Code Type = Both
      Begin JS Routine:
        blockText = 'Block ' + String(mainBlocks.thisN + 1) + ' of 4\n\nPress SPACE when you are ready.';
      Begin Routine:
        blockText = 'Block ' + str(mainBlocks.thisN + 1) + ' of 4\n\nPress SPACE when you are ready.'
    TextComponent block_intro_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      text [set every repeat] = $blockText
      wrapWidth = 1.4
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    KeyboardComponent block_intro_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine main_decision
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    CodeComponent main_setup
      Code Type = Both
      Begin JS Routine:
        trialIndex = globalTrialN;

        if (probeCondition === 'full_probe') {
            probeThisTrial = 1;
        } else if (probeCondition === 'sparse_probe') {
            probeThisTrial = Number(probeSchedule[trialIndex]);
        } else {
            probeThisTrial = 0;
        }
      Begin Routine:
        trialIndex = globalTrialN

        if probeCondition == 'full_probe':
            probeThisTrial = 1
        elif probeCondition == 'sparse_probe':
            probeThisTrial = int(probeSchedule[trialIndex])
        else:
            probeThisTrial = 0
    TextComponent main_pre_fix
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = +
      wrapWidth = 1.4
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    GratingComponent main_gabor
      contrast = 0.8
      mask = gauss
      ori [set every repeat] = tiltSign * tiltDeg
      sf = 4
      size = (0.18, 0.18)
      startVal [condition] = main_pre_fix.status == FINISHED
      stopVal [duration (s)] = 0.15
      tex = sin
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    TextComponent main_wait_fix
      letterHeight = 0.05
      startVal [condition] = main_gabor.status == FINISHED
      text = +
      wrapWidth = 1.4
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    KeyboardComponent main_resp
      allowedKeys = ['f', 'j']
      correctAns [set every repeat] = $corrAns
      forceEndRoutine = False
      startVal [condition] = main_pre_fix.status == FINISHED
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent main_minexposure
      Code Type = Both
      Begin JS Routine:
        decisionEnd = -1;
      Begin Routine:
        decisionEnd = -1
      Each Frame:
        if decisionEnd < 0:
            if main_resp.keys and t >= 1.0 + 0.15:
                decisionEnd = t
            elif t >= 1.0 + 1.5:
                decisionEnd = t
        if decisionEnd >= 0:
            if (probeThisTrial == 1 and bool(main_resp.keys)):
                continueRoutine = False
            elif t >= decisionEnd + 1.5:
                continueRoutine = False
      Each JS Frame:
        if (decisionEnd < 0) {
            if (main_resp.keys !== undefined && main_resp.keys !== null && main_resp.keys.length > 0 && t >= 1.0 + 0.15) {
                decisionEnd = t;
            } else if (t >= 1.0 + 1.5) {
                decisionEnd = t;
            }
        }
        if (decisionEnd >= 0) {
            if ((probeThisTrial === 1 && main_resp.keys !== undefined && main_resp.keys !== null && main_resp.keys.length > 0)) {
                continueRoutine = false;
            } else if (t >= decisionEnd + 1.5) {
                continueRoutine = false;
            }
        }
    CodeComponent main_end
      Code Type = Both
      End JS Routine:
        choiceMade = (
            main_resp.keys !== undefined &&
            main_resp.keys !== null &&
            main_resp.keys.length > 0
        ) ? 1 : 0;
        let probeOriginallyScheduled = probeThisTrial;
        if (choiceMade === 0) {
            probeThisTrial = 0;
        }

        psychoJS.experiment.addData('phase', 'main');
        psychoJS.experiment.addData('trialIndex', trialIndex);
        psychoJS.experiment.addData('blockIndex', mainBlocks.thisN);
        psychoJS.experiment.addData('trialInBlock', mainTrials.thisN);
        psychoJS.experiment.addData('tiltDegUsed', tiltDeg);
        psychoJS.experiment.addData('tiltSignUsed', tiltSign);
        psychoJS.experiment.addData('probeOriginallyScheduled', probeOriginallyScheduled);
        psychoJS.experiment.addData('probeScheduled', probeThisTrial);
        psychoJS.experiment.addData('choiceMade', choiceMade);
        psychoJS.experiment.addData('confidenceRequested', probeThisTrial);
        psychoJS.experiment.addData('confidenceMade', 0);

        globalTrialN += 1;
      End Routine:
        choiceMade = 1 if main_resp.keys else 0
        probeOriginallyScheduled = probeThisTrial
        if choiceMade == 0:
            probeThisTrial = 0

        thisExp.addData('phase', 'main')
        thisExp.addData('trialIndex', trialIndex)
        thisExp.addData('blockIndex', mainBlocks.thisN)
        thisExp.addData('trialInBlock', mainTrials.thisN)
        thisExp.addData('tiltDegUsed', tiltDeg)
        thisExp.addData('tiltSignUsed', tiltSign)
        thisExp.addData('probeOriginallyScheduled', probeOriginallyScheduled)
        thisExp.addData('probeScheduled', probeThisTrial)
        thisExp.addData('choiceMade', choiceMade)
        thisExp.addData('confidenceRequested', probeThisTrial)
        thisExp.addData('confidenceMade', 0)

        globalTrialN += 1
  Routine main_post_probe
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    TextComponent confidence_prompt
      letterHeight = 0.04
      pos = (0, 0.22)
      startVal [time (s)] = 0
      text = How confident are you that your choice was correct?
      wrapWidth = 1.4
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    TextComponent conf_n1
      letterHeight = 0.06
      pos = (-0.30, 0.02)
      startVal [time (s)] = 0
      text = 1
      wrapWidth = 1.4
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    TextComponent conf_n2
      letterHeight = 0.06
      pos = (-0.18, 0.02)
      startVal [time (s)] = 0
      text = 2
      wrapWidth = 1.4
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    TextComponent conf_n3
      letterHeight = 0.06
      pos = (-0.06, 0.02)
      startVal [time (s)] = 0
      text = 3
      wrapWidth = 1.4
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    TextComponent conf_n4
      letterHeight = 0.06
      pos = (0.06, 0.02)
      startVal [time (s)] = 0
      text = 4
      wrapWidth = 1.4
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    TextComponent conf_n5
      letterHeight = 0.06
      pos = (0.18, 0.02)
      startVal [time (s)] = 0
      text = 5
      wrapWidth = 1.4
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    TextComponent conf_n6
      letterHeight = 0.06
      pos = (0.30, 0.02)
      startVal [time (s)] = 0
      text = 6
      wrapWidth = 1.4
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    TextComponent conf_lab_lo
      letterHeight = 0.03
      pos = (-0.30, -0.07)
      startVal [time (s)] = 0
      text = Guessing
      wrapWidth = 0.3
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    TextComponent conf_lab_hi
      letterHeight = 0.03
      pos = (0.30, -0.07)
      startVal [time (s)] = 0
      text = Certain
      wrapWidth = 0.3
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    TextComponent conf_hint
      letterHeight = 0.028
      pos = (0, -0.22)
      startVal [time (s)] = 0
      text = F = move left     J = move right     SPACE = confirm
      wrapWidth = 1.4
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    PolygonComponent conf_marker
      fillColor = white
      opacity [set every frame] = markerOpacity
      ori = 180
      pos [set every frame] = (markerX, 0.09)
      shape = triangle
      size = (0.04, 0.04)
      startVal [time (s)] = 0
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    KeyboardComponent confidence_resp
      allowedKeys = ['f', 'j', 'space']
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    CodeComponent confidence_logic
      Code Type = Both
      Begin JS Routine:
        confRating = 0;
        confMoved = 0;
        confNKeysSeen = 0;
        confFirstT = '';
        confSubmitT = '';
        markerX = 0;
        markerOpacity = 0;
      Begin Routine:
        confRating = 0
        confMoved = 0
        confNKeysSeen = 0
        confFirstT = ''
        confSubmitT = ''
        markerX = 0
        markerOpacity = 0
      Each Frame:
        allConfKeys = confidence_resp.keys if confidence_resp.keys else []
        if isinstance(allConfKeys, str):
            allConfKeys = [allConfKeys]
        for k in allConfKeys[confNKeysSeen:]:
            if k == 'f' or k == 'j':
                if confMoved == 0:
                    confRating = 3 if k == 'f' else 4  # first press: one step from the midpoint
                    confMoved = 1
                    confFirstT = t
                elif k == 'f':
                    confRating = max(1, confRating - 1)
                else:
                    confRating = min(6, confRating + 1)
            elif k == 'space' and confMoved == 1:
                confSubmitT = t
                continueRoutine = False
        confNKeysSeen = len(allConfKeys)
        if confMoved == 1:
            markerX = (confRating - 3.5) * 0.12
            markerOpacity = 1
      Each JS Frame:
        let allConfKeys = (confidence_resp.keys === undefined || confidence_resp.keys === null) ? [] : confidence_resp.keys;
        if (typeof allConfKeys === 'string') {
            allConfKeys = [allConfKeys];
        }
        for (let k of allConfKeys.slice(confNKeysSeen)) {
            if (k === 'f' || k === 'j') {
                if (confMoved === 0) {
                    confRating = (k === 'f') ? 3 : 4;
                    confMoved = 1;
                    confFirstT = t;
                } else if (k === 'f') {
                    confRating = Math.max(1, confRating - 1);
                } else {
                    confRating = Math.min(6, confRating + 1);
                }
            } else if (k === 'space' && confMoved === 1) {
                confSubmitT = t;
                continueRoutine = false;
            }
        }
        confNKeysSeen = allConfKeys.length;
        if (confMoved === 1) {
            markerX = (confRating - 3.5) * 0.12;
            markerOpacity = 1;
        }
      End JS Routine:
        psychoJS.experiment.addData('confidenceRating', (confMoved === 1) ? confRating : '');
        psychoJS.experiment.addData('confidenceRT', confSubmitT);
        psychoJS.experiment.addData('confidenceFirstMoveT', confFirstT);
        psychoJS.experiment.addData('confidenceMade', confMoved);
      End Routine:
        thisExp.addData('confidenceRating', confRating if confMoved == 1 else '')
        thisExp.addData('confidenceRT', confSubmitT)
        thisExp.addData('confidenceFirstMoveT', confFirstT)
        thisExp.addData('confidenceMade', confMoved)
  Routine block_break
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    CodeComponent block_break_code
      Code Type = Both
      Begin JS Routine:
        let blockNumber = mainBlocks.thisN + 1;
        if (blockNumber < 4) {
            breakText = 'End of block ' + String(blockNumber) +
                ' of 4.\n\nTake a short break. Press SPACE to continue.';
        } else {
            breakText = 'The main task is complete. Press SPACE to continue.';
        }
      Begin Routine:
        blockNumber = mainBlocks.thisN + 1
        if blockNumber < 4:
            breakText = ('End of block ' + str(blockNumber) + ' of 4.\n\n'
                         'Take a short break. Press SPACE to continue.')
        else:
            breakText = 'The main task is complete. Press SPACE to continue.'
    TextComponent block_break_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      text [set every repeat] = $breakText
      wrapWidth = 1.4
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    KeyboardComponent block_break_key
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine thanks
    RoutineSettingsComponent thanks
      stopVal [duration (s)] = 3
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    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text = The experiment is finished. Thank you!
      wrapWidth = 1.4
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Flow
  Routine welcome
  Routine consent
  CounterbalanceRoutine conditionAllocation
  Routine instructions
  Routine initialize
  LoopInitiator confidenceInstructionLoop loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = showConfInstr
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    Routine confidence_instructions
  LoopTerminator confidenceInstructionLoop
  LoopInitiator neutralInstructionLoop loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = showNeutralInstr
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    Routine neutral_instructions
  LoopTerminator neutralInstructionLoop
  Routine practice_intro
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = conditions/two_orientations.csv
    loopType = random
    nReps = 6
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    conditions:
      [OrderedDict([('tiltSign', np.int64(-1)), ('corrAns', 'f'), ('orientationLabel', 'left')]),
      OrderedDict([('tiltSign', np.int64(1)), ('corrAns', 'j'), ('orientationLabel', 'right')])]
    Routine practice_decision
    Routine practice_feedback
  LoopTerminator practiceTrials
  Routine calibration_intro
  LoopInitiator calibrationTrials loopType="MultiStairHandler"
    conditions = []
    conditionsFile = conditions/quest_conditions.csv
    conditionsFile_QUEST = conditions/quest_conditions.csv
    conditionsFile_questplus = conditions/quest_conditions.csv
    conditionsFile_simple = conditions/quest_conditions.csv
    nReps = 40
    stairType = QUEST
    switchMethod = sequential
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    Routine calibration_decision
  LoopTerminator calibrationTrials
  Routine calibration_summary
  Routine baseline_intro
  LoopInitiator baselineTrials loopType="TrialHandler"
    conditionsFile = conditions/two_orientations.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('tiltSign', np.int64(-1)), ('corrAns', 'f'), ('orientationLabel', 'left')]),
      OrderedDict([('tiltSign', np.int64(1)), ('corrAns', 'j'), ('orientationLabel', 'right')])]
    Routine baseline_decision
  LoopTerminator baselineTrials
  Routine main_intro
  LoopInitiator mainBlocks loopType="TrialHandler"
    conditions = []
    isTrials = False
    loopType = sequential
    nReps = 4
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    Routine block_intro
    LoopInitiator mainTrials loopType="TrialHandler"
      conditionsFile = conditions/two_orientations.csv
      loopType = random
      nReps = 20
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      conditions:
        [OrderedDict([('tiltSign', np.int64(-1)), ('corrAns', 'f'), ('orientationLabel', 'left')]),
        OrderedDict([('tiltSign', np.int64(1)), ('corrAns', 'j'), ('orientationLabel', 'right')])]
      Routine main_decision
      LoopInitiator confidenceProbeLoop loopType="TrialHandler"
        conditions = []
        isTrials = False
        loopType = sequential
        nReps = probeThisTrial
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        Routine main_post_probe
      LoopTerminator confidenceProbeLoop
    LoopTerminator mainTrials
    Routine block_break
  LoopTerminator mainBlocks
  Routine thanks
